Journal
Description: New Journal
Version VersionNumber=2.4
MDA - Save Stage List
  stFileName = "C:\Users\shahp2\Desktop\MicroPointTarget\PosList.STG"
Load Memory List
  stFilename = "C:\Users\shahp2\Desktop\MicroPointTarget\PosList.STG"
ForNextLoop LoopVariable=, StartValue=1, EndValue=35, StepValue=1
  Get INI String
    stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_1.ini"
    stIniSection = "main"
    stIniKey = "status"
    stDefaultValue = ""
    stVariable = "status"
  IfThenElse Expression=status = "Ready"
    CodeBlock Condition=true
      Move To Description
        stDescription = "pos1"
      Delay
        dpDelayTime = 1
        nDelayUnits = 2
      Get INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_1.ini"
        stIniSection = "main"
        stIniKey = "X"
        stDefaultValue = ""
        stVariable = "X"
      Get INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_1.ini"
        stIniSection = "main"
        stIniKey = "Y"
        stDefaultValue = ""
        stVariable = "Y"
      Get INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_1.ini"
        stIniSection = "main"
        stIniKey = "Z"
        stDefaultValue = ""
        stVariable = "Z"
      Device.Focus.CurPos = (0.75 * (VAL(Z)-18))+ Device.Focus.CurPos 
      Delay
        dpDelayTime = 1
        nDelayUnits = 2
      Select Illumination
        bUseLegacyDelay = FALSE
        cMillisecDelay = 100
        stSetting = "GFP_RFP 561"
      Acquire
        imDest = "ROI"
      Select Image
        im = m 1 7 14 0 1 11 0 8 Untitled
        prompt = ""
      Clear All Regions
        clearImage = m 1 7 9 0 1 11 0 8 Untitled
      Create Region
        nRgnType = 2
        nX1 = 255 Override=Variable OverrideVariable=X
        nY1 = 255 Override=Variable OverrideVariable=Y
        nX2 = 5 Override=None OverrideVariable=Width/To:X
        nY2 = 5 Override=None OverrideVariable=Height/To:Y
      ForNextLoop LoopVariable=, StartValue=1, EndValue=40, StepValue=1
        Targeted Illumination
          IlluminationSetting = "[None]" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "60x Silicone Oil" Override=None OverrideVariable=Coordinate system setting
          PositionSetting = 3 Override=Variable OverrideVariable=3
          PositionImageCoordinatesX = 256 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 256 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 2 Override=Variable OverrideVariable=1
          NeutralDensitySetting = 40 Override=Variable OverrideVariable=36
          dExpDurMS = 10 Override=None OverrideVariable=Mask Exposure Duration [ms]
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 0.5
          nDelayUnits = 2
      Save As
        imSave = m 1 7 9 0 1 11 0 8 Untitled
        fSpec = "C:\Users\shahp2\Desktop\MicroPointTarget\ROI.tif"
        nParm = 0
        m_formatID = 336
      Acquire
        imDest = "After"
      Save As
        imSave = m 1 7 9 0 1 18 0 8 Untitled
        fSpec = "C:\Users\shahp2\Desktop\MicroPointTarget\After.tif"
        nParm = 0
        m_formatID = 336
      Write INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_1.ini"
        stIniSection = "main"
        stIniKey = "status"
        stExpression = ""Done""
  Get INI String
    stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_2.ini"
    stIniSection = "main"
    stIniKey = "status"
    stDefaultValue = ""
    stVariable = "status"
  IfThenElse Expression=status = "Ready"
    CodeBlock Condition=true
      Move To Description
        stDescription = "pos2"
      Delay
        dpDelayTime = 1
        nDelayUnits = 2
      Get INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_2.ini"
        stIniSection = "main"
        stIniKey = "X"
        stDefaultValue = ""
        stVariable = "X"
      Get INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_2.ini"
        stIniSection = "main"
        stIniKey = "Y"
        stDefaultValue = ""
        stVariable = "Y"
      Get INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_2.ini"
        stIniSection = "main"
        stIniKey = "Z"
        stDefaultValue = ""
        stVariable = "Z"
      Device.Focus.CurPos = (0.75 * (VAL(Z)-18))+ Device.Focus.CurPos 
      Delay
        dpDelayTime = 1
        nDelayUnits = 2
      Select Illumination
        bUseLegacyDelay = FALSE
        cMillisecDelay = 100
        stSetting = "GFP_RFP 561"
      Acquire
        imDest = "ROI"
      Select Image
        im = m 1 7 14 0 1 29 0 8 Untitled
        prompt = ""
      Clear All Regions
        clearImage = m 1 7 9 0 1 29 0 8 Untitled
      Create Region
        nRgnType = 2
        nX1 = 255 Override=Variable OverrideVariable=X
        nY1 = 255 Override=Variable OverrideVariable=Y
        nX2 = 5 Override=None OverrideVariable=Width/To:X
        nY2 = 5 Override=None OverrideVariable=Height/To:Y
      ForNextLoop LoopVariable=, StartValue=1, EndValue=40, StepValue=1
        Targeted Illumination
          IlluminationSetting = "[None]" Override=None OverrideVariable=Illumination setting
          ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
          CoordinateSetting = "60x Silicone Oil" Override=None OverrideVariable=Coordinate system setting
          PositionSetting = 3 Override=Variable OverrideVariable=3
          PositionImageCoordinatesX = 256 Override=None OverrideVariable=Position: image coordinate X
          PositionImageCoordinatesY = 256 Override=None OverrideVariable=Position: image coordinate Y
          NumberOfLaserFires = 2 Override=Variable OverrideVariable=1
          NeutralDensitySetting = 40 Override=Variable OverrideVariable=36
          dExpDurMS = 10 Override=None OverrideVariable=Mask Exposure Duration [ms]
          PointSize = 1 Override=None OverrideVariable=Point size
        Delay
          dpDelayTime = 0.5
          nDelayUnits = 2
      Save As
        imSave = m 1 7 9 0 1 29 0 8 Untitled
        fSpec = "C:\Users\shahp2\Desktop\MicroPointTarget\ROI.tif"
        nParm = 0
        m_formatID = 336
      Acquire
        imDest = "After"
      Save As
        imSave = m 1 7 9 0 1 36 0 8 Untitled
        fSpec = "C:\Users\shahp2\Desktop\MicroPointTarget\After.tif"
        nParm = 0
        m_formatID = 336
      Write INI String
        stIniPath = "C:\Users\shahp2\Desktop\MicroPointTarget\coords_2.ini"
        stIniSection = "main"
        stIniKey = "status"
        stExpression = ""Done""
  Delay
    dpDelayTime = 1
    nDelayUnits = 2
